PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
  keyboardBackend = ioHub
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Routines
  Routine WellcomeScreen
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    TextComponent Wellcometext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Wellcome to my experimant.
        It consists of three sections:
        1- You will be shown several words one by one and ask to keep in mind (each word will stay for 1 sec)
        2- For about 3 minutes, the researcher will keep you busy by asking questions
        3- You will be shown again several words, and input yes (y) or no (n) based on whether you think you saw it in the first part of the experiment.

        Press 'space' to start the experiment.
    KeyboardComponent skipWellcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine basicSpace
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    TextComponent textEmpty
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Part1
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    TextComponent Word
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $WordToRemember
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  Routine Part2Wait
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    TextComponent Part2WaitText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Now please relax and focus on some other stuff for 3 minutes
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  Routine Part3Explain
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    TextComponent Part3Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Okay, now you will try to remember which words were in the list
        Press yes (y) if it was in the list.
        Press no (n) if it was not.
        There is no time limitation.
        We will start in 10 seconds
  Routine Part3
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    TextComponent WordToRememberPart3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $WordToRemember
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ThankYouScreen
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    TextComponent ThankYou
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thank You For Participation.
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Flow
  Routine WellcomeScreen
  Routine basicSpace
  LoopInitiator Part1Loop loopType="TrialHandler"
    Selected rows = 0:26
    conditionsFile = Words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordToRemember': 'Bayır', 'IsExists': 1},
      {'WordToRemember': 'Dağ', 'IsExists': 1},
      {'WordToRemember': 'Kamp', 'IsExists': 1},
      {'WordToRemember': 'Ateş', 'IsExists': 1},
      {'WordToRemember': 'Çadır', 'IsExists': 1},
      {'WordToRemember': 'Duman', 'IsExists': 1},
      {'WordToRemember': 'Kömür', 'IsExists': 1},
      {'WordToRemember': 'Tente', 'IsExists': 1},
      {'WordToRemember': 'Sinek', 'IsExists': 1},
      {'WordToRemember': 'Böcek', 'IsExists': 1},
      {'WordToRemember': 'Fare', 'IsExists': 1},
      {'WordToRemember': 'Konaklama', 'IsExists': 1},
      {'WordToRemember': 'Tempo', 'IsExists': 1},
      {'WordToRemember': 'Ağaç', 'IsExists': 1},
      {'WordToRemember': 'Selvi', 'IsExists': 1},
      {'WordToRemember': 'Çınar', 'IsExists': 1},
      {'WordToRemember': 'Nehir', 'IsExists': 1},
      {'WordToRemember': 'Dere', 'IsExists': 1},
      {'WordToRemember': 'Vadi', 'IsExists': 1},
      {'WordToRemember': 'Ova', 'IsExists': 1},
      {'WordToRemember': 'Şafak', 'IsExists': 1},
      {'WordToRemember': 'Gece', 'IsExists': 1},
      {'WordToRemember': 'Siyah', 'IsExists': 1},
      {'WordToRemember': 'Yeşil', 'IsExists': 1},
      {'WordToRemember': 'Koyu', 'IsExists': 1},
      {'WordToRemember': 'Koru', 'IsExists': 1},
      {'WordToRemember': 'Odun', 'IsExists': 0},
      {'WordToRemember': 'Çadır', 'IsExists': 0},
      {'WordToRemember': 'Kene', 'IsExists': 0},
      {'WordToRemember': 'Sıçan', 'IsExists': 0},
      {'WordToRemember': 'Çam', 'IsExists': 0},
      {'WordToRemember': 'Orman', 'IsExists': 0},
      {'WordToRemember': 'Dal', 'IsExists': 0},
      {'WordToRemember': 'Tepe', 'IsExists': 0},
      {'WordToRemember': 'Irmak', 'IsExists': 0},
      {'WordToRemember': 'Mola', 'IsExists': 0}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
    Routine Part1
    Routine basicSpace
  LoopTerminator Part1Loop
  Routine Part2Wait
  Routine Part3Explain
  LoopInitiator Part3loop loopType="TrialHandler"
    conditionsFile = Words.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Part3
    Routine basicSpace
  LoopTerminator Part3loop
  Routine ThankYouScreen
