PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'age': '', 'gender': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = recit1
  keyboardBackend = ioHub
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Routines
  Routine trial
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  Routine welcome_page
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    TextComponent welcome_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        In the first part of this experiment, you will be shown 50 different images in quick succession. You are not required to give any keyboard response in this part.

        Press space when you are ready.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine recall
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  Routine part2
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    TextComponent part2_info
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed part 1. Now, in the next part, you will be shown 100 different images. Some of these images are the ones that you were shown in the first part and some are new.

        If you think you have seen the image before in part 1, press "y", otherwise, press "n".

        Press space when you are ready.
    KeyboardComponent key_response_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine part1
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    ImageComponent part1_images
      image [set every repeat] = $nameimage
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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  Routine part2_2
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    ImageComponent part2_images
      image [set every repeat] = $nameimage
      size = (0.5, 0.5)
      startVal [time (s)] = 0.01
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'y','n'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.01
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine end_page
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = The experiment ended. Thank you.
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Flow
  Routine welcome_page
  LoopInitiator part1_trials loopType="TrialHandler"
    conditionsFile = part1.xlsx
    loopType = fullRandom
    nReps = 1
    random seed = 5
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    conditions:
      [{'imagetype': 'simple', 'nameimage': 'images/simple/simple1.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple2.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple3.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple4.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple5.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple6.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple7.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple8.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple9.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple10.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple11.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple12.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple13.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple14.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple15.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple16.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple17.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple18.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple19.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple20.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple21.jpg'},
      {'imagetype': 'simple', 'nameimage': 'images/simple/simple22.jpg'}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
    Routine part1
  LoopTerminator part1_trials
  Routine part2
  LoopInitiator part2_trials loopType="TrialHandler"
    conditionsFile = part2.xlsx
    loopType = fullRandom
    nReps = 1
    random seed = 7
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    conditions:
      [{'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple1.jpg', 'Correct': 'n'},
      {'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple2.jpg', 'Correct': 'n'},
      {'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple3.jpg', 'Correct': 'n'},
      {'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple4.jpg', 'Correct': 'n'},
      {'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple5.jpg', 'Correct': 'n'},
      {'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple6.jpg', 'Correct': 'n'},
      {'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple7.jpg', 'Correct': 'n'},
      {'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple8.jpg', 'Correct': 'n'},
      {'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple9.jpg', 'Correct': 'n'},
      {'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple10.jpg', 'Correct': 'n'},
      {'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple11.jpg', 'Correct': 'n'},
      {'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple12.jpg', 'Correct': 'n'},
      {'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple13.jpg', 'Correct': 'n'},
      {'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple14.jpg', 'Correct': 'n'},
      {'imagetype': 'wrong_simple', 'nameimage': 'images/wrong/simple/wrongsimple15.jpg', 'Correct': 'n'}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
    Routine part2_2
  LoopTerminator part2_trials
  Routine end_page
