PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = deneememe
  keyboardBackend = ioHub
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Routines
  Routine welcome_page
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    TextComponent welcome_text
      letterHeight = 0.05
      pos = (0,-0.2)
      startVal [time (s)] = 0.0
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      text:
        Birazdan ekranda harf dizileri göreceksiniz.
        * Eğer ekranda gördüğünüz harfler:
        geçerli bir kelimeyse E tuşuna değilse H tuşuna basın.
        * Tuşa bastığınızda, önce kısa süreliğine ____ işareti görünecek, sonra da sıradaki harf dizisi ekrana gelecektir.
        * Eğer siz tuşa basamadan ekran değişirse, sıradaki kelime dizisine odaklanın.

        Diğer sayfa için boşluk tuşuna basın
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine neutral
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    TextComponent text__word
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $part1
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  Routine break_2
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    TextComponent text_break
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Encoding phase is done.
        Do some simple math operations for 3 minutes!
        Press 'space' after you done it!
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine neutral_2
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    TextComponent text_neutral2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = __________
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  Routine recall
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    TextComponent textword
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $reordered_wrt_rand
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'e','h'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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  Routine encoding
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    TextComponent text_neutral
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = ______
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  Routine recall_text
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    TextComponent recall_textt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Recall phase is starting!
        Press 'space' to start

        You will see 50 words.
        Press 'y' if you think you saw the word at previous phase. Otherwise press 'n'
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine neutral_3
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = ______
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  Routine neutral_recall
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    TextComponent text____
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text [set every repeat] = ___________
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  Routine yes_or_no
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  Routine Encoding_starting
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    TextComponent text_ee
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Encoding phase is starting...
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  Routine End
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Bitti
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  Routine registiration
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    CodeComponent registiration_code
      Code Type = Auto->JS
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      Begin Routine:
        this_resp = None
        correct = False

        keys = event.getKeys()
        if "h" in keys:
           this_resp = "h"
        elif "e" in keys:
           this_resp = "e"

        word_value = int(W_or_nW)
        print(this_resp)
        print('word value:',word_value)
        if word_value == 1 and this_resp =="e":
            correct = True
        elif word_value == 0 and this_resp =="h":
            correct = True

        #thisExp.addData("response", this_resp)
        thisExp.addData("correct",correct)
  Routine registiration_trial
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  Routine welcome_page_two
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    TextComponent text_2_edit
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Tekrar edelim: E yani Evet, ekrandaki harfler kelimeyse, H yani Hayır, değilse basılacak tuşlardır.
        Deneyi başlatmaya hazır olduğunuzda boşluk tuşuna basın
    KeyboardComponent key_resp_4_edit
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wlcm_page
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    TextComponent wlcm_txt
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        * Yanıt verirken avuç içini bilgisayarın alt hizasına yerleştirin ve deney boyunca elinizi oynatmayın. Tuşlara basarken iki ayrı parmak kullanın (işaret ve orta parmak)

        Diğer sayfa için boşluk tuşuna basın
    KeyboardComponent key_resp_wlcm
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome_page
  Routine wlcm_page
  Routine welcome_page_two
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = word.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'reordered_wrt_rand': 'üpmin', 'W_or_nW': 0, 'SC_or_M': 1},
      {'reordered_wrt_rand': 'topuk', 'W_or_nW': 1, 'SC_or_M': 1},
      {'reordered_wrt_rand': 'lovor', 'W_or_nW': 0, 'SC_or_M': 1},
      {'reordered_wrt_rand': 'nokta', 'W_or_nW': 1, 'SC_or_M': 1},
      {'reordered_wrt_rand': 'saYfA', 'W_or_nW': 1, 'SC_or_M': 0},
      {'reordered_wrt_rand': 'tUgÜS', 'W_or_nW': 0, 'SC_or_M': 0},
      {'reordered_wrt_rand': 'tAbLO', 'W_or_nW': 1, 'SC_or_M': 0},
      {'reordered_wrt_rand': 'lıPIM', 'W_or_nW': 0, 'SC_or_M': 0},
      {'reordered_wrt_rand': 'KiLiM', 'W_or_nW': 1, 'SC_or_M': 0},
      {'reordered_wrt_rand': 'mantar', 'W_or_nW': 1, 'SC_or_M': 1},
      {'reordered_wrt_rand': 'ZofUN', 'W_or_nW': 0, 'SC_or_M': 0},
      {'reordered_wrt_rand': 'meşvi', 'W_or_nW': 0, 'SC_or_M': 1}]
    Routine neutral_recall
    Routine recall
    Routine registiration
  LoopTerminator trials
  Routine End
